<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Zyre;assembly=Bonsai.Zyre"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:PupilInterface;assembly=PupilInterface"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZyreNode">
          <p1:Name>Pupil</p1:Name>
          <p1:Group>pupil-mobile-v4</p1:Group>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>WhisperEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventType</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>WhisperEvent</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Content</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>First</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:PupilSensor" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PupilSensorData</Name>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>WorldCamera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PupilSensorData</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SensorLoggingName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>WorldCamera</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SensorLoggingName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SensorName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>PI world v1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SensorName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitializationCommand" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="InitializationCommand" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ZyrePupilSensor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorName" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>SensorFilter</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>SensorName</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>PI world v1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DataEndpoint</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ConnectionString" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://192.168.1.79:60841</zmq:ConnectionString>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorLoggingName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>WorldCamera</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>CommandEndpoint</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ConnectionString" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SensorUuid</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="InitializationCommand" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>2</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:ToMessage" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Push">
                      <zmq:ConnectionString>tcp://192.168.1.79:63883</zmq:ConnectionString>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="14" Label="Source1" />
                  <Edge From="2" To="16" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="12" Label="Source2" />
                  <Edge From="9" To="11" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="22" Label="Source2" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source4" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Last</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Buffer.Length</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Buffer</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:DecodeByteFrame" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>