<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:PupilInterface;assembly=PupilInterface"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZreNode">
          <p1:Name>Zre</p1:Name>
          <p1:JoinGroup>pupil-mobile-v4</p1:JoinGroup>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SensorName" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>SensorSelect</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SensorName</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>Gaze</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DataEndpoint</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ConnectionString" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://192.168.1.97:53122</zmq:ConnectionString>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>First.Buffer</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SensorName</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>