<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:PupilInterface;assembly=PupilInterface"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZyreNode">
          <p1:Name>Pupil</p1:Name>
          <p1:Group>pupil-mobile-v4</p1:Group>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>WhisperEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventType</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>WhisperEvent</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventType</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Content</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>First</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PupilSensor" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Sensors</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Sensors</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT2S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>WorldCamera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SensorName</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>PI world v1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>GazeData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SensorName</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>Gaze</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DataEndpoint</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ConnectionString" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://192.168.1.97:49523</zmq:ConnectionString>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FrameToSingle">
          <p1:Offset>0</p1:Offset>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FrameToSingle">
          <p1:Offset>4</p1:Offset>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FrameToUInt64">
          <p1:Offset>0</p1:Offset>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>GazePosition</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CommandEndpoint</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ConnectionString" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>{"action": "refresh_controls"}</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SensorUuid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:ToMessage" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Push">
          <zmq:ConnectionString>tcp://192.168.1.97:55598</zmq:ConnectionString>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="22" Label="Source1" />
      <Edge From="11" To="25" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="20" Label="Source1" />
      <Edge From="17" To="20" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source3" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="29" Label="Source1" />
      <Edge From="24" To="26" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>